PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Screen = 3
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = CheckerBar_vis_build-v0.7
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Horizontal_Left
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    CodeComponent checker_texture_down
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #
        #from stimupy.stimuli.checkerboards import checkerboard

        stim = checkerboard(visual_size=(3,15), ppd=31,
        shape=None, frequency=0.5, board_shape=(3,15),
        check_visual_size=1, period='ignore', rotation=0,
        intensity_checks=(-1,1), intensity_target=1)

        #PARAMETERS
        frame_rate = 60

        color_alternating_freq = int(frame_rate/12)

        #Initialize frame counter
        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_down.color = 'white'
        else:
            move_down.color = 'black'
    GratingComponent move_down
      phase [set every frame] = 0.0
      pos [set every frame] = (0, 0.5+t*-0.07)
      size = (1.8, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13.4
      tex = $stim['img']
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    ImageComponent gray_screen_3
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 13.4
      stopVal [duration (s)] = 10
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  Routine Vertical_Right
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    CodeComponent checker_texture_right
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #from stimupy.stimuli.checkerboards import checkerboard

        stim = checkerboard(visual_size=(13,3), ppd=31,
        shape=None, frequency=0.5, board_shape=(13,3),
        check_visual_size=1, period='ignore', rotation=0,
        intensity_checks=(-1,1), intensity_target=1)

        #PARAMETERS

        frame_rate = 60

        color_alternating_freq = int(frame_rate/12)

        #Initialize frame counter
        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_right.color = 'white'
        else:
            move_right.color = 'black'
    GratingComponent move_right
      phase [set every frame] = 0.0
      pos [set every frame] = (-1+t*0.1, 0)
      size = (0.2,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      tex = $stim['img']
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    ImageComponent gray_screen_1
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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  Routine Horizontal_Up
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    CodeComponent checker_texture_up
      Code Type = Auto->JS
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      Begin Experiment:
        #import numpy as np
        #from psychopy import visual
        #
        #from stimupy.stimuli.checkerboards import checkerboard

        stim = checkerboard(visual_size=(3,15), ppd=31,
        shape=None, frequency=0.5, board_shape=(3,15),
        check_visual_size=1, period='ignore', rotation=0,
        intensity_checks=(-1,1), intensity_target=1)

        #PARAMETERS
        frame_rate = 60

        color_alternating_freq = int(frame_rate/12)

        #Initialize frame counter
        frame_counter = 0
      Each Frame:
        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_up.color = 'white'
        else:
            move_up.color = 'black'
    GratingComponent move_up
      phase [set every frame] = 0.0
      pos [set every frame] = (0, -0.5+t*0.07)
      size = (1.8, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13.4
      tex = $stim['img']
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    ImageComponent gray_screen_4
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 13.4
      stopVal [duration (s)] = 10
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  Routine Vertical_Left
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    CodeComponent checker_texture_left
      Code Type = Auto->JS
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      Before Experiment:
        #import numpy as np
        #from stimupy.stimuli.checkerboards import checkerboard

        stim = checkerboard(visual_size=(13,3), ppd=31,
        shape=None, frequency=0.5, board_shape=(13,3),
        check_visual_size=1, period='ignore', rotation=0,
        intensity_checks=(-1,1), intensity_target=1)
      Begin Experiment:
        #import numpy as np
        #from psychopy import visual

        #PARAMETERS
        ppd = 31
        frame_rate = 60

        color_alternating_freq = int(frame_rate/12)

        #Initialize frame counter
        frame_counter = 0
      Each Frame:
        #need to change foreground color value from black to
        #white at 6Hz

        # Update frame counter
        frame_counter += 1

        #Swap foreground color at 6Hz frequency
        if frame_counter % (color_alternating_freq * 2) < color_alternating_freq:
            move_left.color = 'white'
        else:
            move_left.color = 'black'
    GratingComponent move_left
      phase [set every frame] = 0.0
      pos [set every frame] = (1+t*-0.1, 0)
      size = (0.2,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
      tex = $stim['img']
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    ImageComponent gray_screen_2
      color = $[0,0,0]
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 10
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  Routine Custom_Imports
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    CodeComponent import_modules
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from psychopy import visual

        from stimupy.stimuli.checkerboards import checkerboard
  Routine Input_Output
    RoutineSettingsComponent Input_Output
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      desc:
        Receive command line arguments from a Parent process when launching this experiment as a a subprocess. This code is meant to circumvent the usual launch of a PsychoPy experiment, forgoing manual entry of subject information into a popup dialog box.

        This block allows standard input system arguments to define:
        - BIDS format information for file saving
        - the number of stimulus trials calculated in the parent process.
        - Save file directory paths
    CodeComponent get_input_arguments
      Code Type = Auto->JS
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      Before Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        #add system argument functionality
        #Get command line arguments passed if present
        sysarg_protocol_id = None
        sysarg_subject_id = None
        sysarg_session_id = None
        sysarg_save_dir = None
        sysarg_nTrials = None # changed data.TrialHandler2 object value nReps value to call this variable
        if len(sys.argv) > 1:
            sysarg_protocol_id = sys.argv[1]  # get the first argument from command line
            sysarg_subject_id = sys.argv[2]  # get the second argument from command line
            sysarg_session_id = sys.argv[3]  # get the third argument from command line
            sysarg_save_dir = sys.argv[4]  # get the fourth argument from command line
            nTrials = sys.argv[5] # get the fifth argument from the command line
            #encoder = sys.argv[6] # TODO: accept encoder parameters
        #==================================================================================================#
    CodeComponent save_bids_format
      Code Type = Auto->JS
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      End Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        # Sipelab standard BIDS protocol file naming for
        #   future batch analysis and data wrangling
        protocol_id = expInfo['Protocol ID']
        subject_id = expInfo['Subject ID']
        session_id = expInfo['Session ID']
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        #save_to = u'data/%s/sub-%s/ses-%s/beh' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'])
        save_to = f'data/{protocol_id}/sub-{subject_id}/ses-{session_id}/beh'
        new_dir = os.path.join(_thisDir, save_to)

        # Create the path if it does not exist
        if not os.path.exists(new_dir):
            os.makedirs(new_dir)


        filename = os.path.join(new_dir, f"sub-{subject_id}_ses-{session_id}_{timestamp}_wheeldf.csv")

        if encoder_data is not None:
            encoder_data.to_csv(filename, index=False)
        else:
            print("No encoder data in `encorder_data`")
        #==================================================================================================#
  Routine Custom_Trigger
    RoutineSettingsComponent Custom_Trigger
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      desc:
        Displays text on grey screen until a keyboard response is registered.

        Upon press, the experiment starts immediately
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Custom_Imports
  Routine Input_Output
  Routine Custom_Trigger
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = nTrials
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    Routine Horizontal_Left
    Routine Vertical_Right
    Routine Horizontal_Up
    Routine Vertical_Left
  LoopTerminator trials
