PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s/sub-%s/ses-%s/beh/sub-%s_ses-%s_%s' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'], expInfo['Subject ID'], expInfo['Session ID'], timestamp)
  Experiment info = {'Protocol ID': 'devJG', 'Subject ID': '01', 'Session ID': '01'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Save log file = False
  Screen = 3
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gratings_vis_devJG_v0.6
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine display_gratings
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    CodeComponent generate_grating_angles
      Code Type = Auto->JS
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      Before Experiment:
        import random


        grating_angles_array = [0, 45, 90, 135, 180, 225, 270, 315]
      Begin Experiment:
        grating_index = 0
      Begin Routine:
        #grating_angle = random.choice(grating_angles_array)

        print("!!!!! Start of routine angle index:", grating_index)

            #print("2. else:", grating_index)
        grating_angle = grating_angles_array[grating_index]
        print("Displaying angle:", grating_angle, " with index: ", grating_index)
        grating_index += 1
        print("grating_index += 1:", grating_index)

        if grating_index == len(grating_angles_array):
            print(grating_index, " is >= ", len(grating_angles_array))
            grating_index = 0
            #print("if statement: index reset")
    ImageComponent stim_grayScreen
      color = 0.0000, 0.0000, 0.0000
      durationEstim = 3
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 300
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    GratingComponent stim_grating
      durationEstim = 2
      opacity = 2
      ori [set every repeat] = grating_angle
      phase [set every frame] = t
      sf = 4
      size = (2, 2)
      startVal [time (s)] = 3.0
      stopVal [frame N] = 300
      tex = sin
      texture resolution = 256
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    CodeComponent code_nidaq_sync_pulse_2
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import nidaqmx
        import time
        from nidaqmx.constants import LineGrouping

        class SyncPulseTask:
            def __init__(self, device, line):
                self.device = device
                self.line = line
                self.sync_times = []
                self.task = nidaqmx.Task()
                self.task.di_channels.add_di_chan(f"{self.device}/{self.line}", line_grouping=LineGrouping.CHAN_PER_LINE)

            def read_pulse(self):
                data = self.task.read(number_of_samples_per_channel=1, timeout=10.0)
                if data[0]:
                    pulse_time = time.time()
                    self.sync_times.append(pulse_time)
                    print(f"Sync pulse received at {pulse_time}")

            def start(self):
                self.task.start()

            def stop(self):
                self.task.stop()
                self.task.close()

        sync_task = SyncPulseTask("Dev1", "port2/line0")
        sync_task.start()
      Each Frame:
        # Check for sync pulse each frame
        sync_task.read_pulse()
      End Experiment:
        # Stop the sync task
        sync_task.stop()

        #save
        thisExp.addData('sync_times', sync_task.sync_times)
    CodeComponent read_encoder
      Code Type = Auto->JS
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      Before Experiment:
        """jgronemeyer 2024 custom code block"""
        import serial
        import time
        from datetime import datetime # for BIDS saving
        import pandas as pd
        import os
        import threading

        # For BIDS file saving
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)


        # Constants
        WHEEL_DIAMETER = 0.2  # in meters, example value
        ENCODER_CPR = 1000    # encoder counts per revolution
        SAMPLE_WINDOW = 0.05  # sample window in seconds, matching the Arduino sample window
        SAVE_DIR = r'C:/dev/devOutput/encoder'  # Directory to save data
        PORT = 'COM4'

        # Set up the serial port connection to arduino
        arduino = serial.Serial(port=PORT, baudrate=57600, timeout=1)

        # Initialize DataFrame to store encoder data
        columns = ['timestamp', 'speed', 'distance', 'direction']
        encoder_data = pd.DataFrame(columns=columns)

        # Shared variable for clicks (raw value received from encoder)
        clicks_lock = threading.Lock() #thread locked for synchronization
        shared_clicks = 0 #cross-thread accessible variable

        def read_encoder():
            global shared_clicks
            while True:
                try:
                    data = arduino.readline().decode('utf-8').strip()
                    if data:
                        with clicks_lock:
                            shared_clicks = int(data)
                except ValueError:
                    pass

        #NOTE: time_interval value should use PsychoPy's core.Clock()
        def calculate_metrics(clicks, time_interval):
            rotations = clicks / ENCODER_CPR
            distance = rotations * (3.1416 * WHEEL_DIAMETER)
            speed = distance / time_interval  # m/s
            return speed, distance

        def determine_direction(clicks):
            if clicks == 0:
                return 0  # Stationary
            elif clicks > 0:
                return 1  # Forward
            else:
                return 2  # Backward

        def save_data(timestamp, speed, distance, direction):
            global encoder_data
            new_data = pd.DataFrame([[timestamp, speed, distance, direction]], columns=encoder_data.columns)
            encoder_data = pd.concat([encoder_data, new_data], ignore_index=True)
      Begin Experiment:
        """jgronemeyer 2024 custom code block"""
        total_distance = 0



        # Start the encoder reading thread
        encoder_thread = threading.Thread(target=read_encoder, daemon=True)
        encoder_thread.start()
      Begin Routine:
        # This value provides the encoder thread with
        #   the timestamp for the start of each Routine
        prev_time = core.getTime()
      Each Frame:
        """jgronemeyer 2024 custom code block"""

        current_time = core.getTime()
        time_interval = current_time - prev_time
        #Time must have passed to collect encoder clicks
        if time_interval >= SAMPLE_WINDOW:
            with clicks_lock:
                clicks = shared_clicks

            speed, distance = calculate_metrics(clicks, time_interval)
            total_distance += distance
            direction = determine_direction(clicks)

            timestamp = current_time
            save_data(timestamp, speed, total_distance, direction)

            #comment out/in for debugging
            print(f"Time: {timestamp:.2f}s, Speed: {speed:.2f} m/s, Total Distance: {total_distance:.2f} m, Direction: {direction}")

            prev_time = current_time
      End Experiment:
        #Export encoder_data to .csv file
        save_to = u'data/%s/sub-%s/ses-%s/beh' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'])
        new_dir = os.path.join(_thisDir, save_to)

        # Create the path if it does not exist
        if not os.path.exists(new_dir):
            os.makedirs(new_dir)

        # Sipelab standard BIDS protocol file naming for
        #   future batch analysis and data wrangling
        protocol_id = expInfo['Protocol ID']
        subject_id = expInfo['Subject ID']
        session_id = expInfo['Session ID']
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        filename = os.path.join(new_dir, f"sub-{subject_id}_ses-{session_id}_{timestamp}_wheeldf.csv")

        encoder_data.to_csv(filename, index=False)
      End Routine:
        #save the dataframe trial by trial
        #thisExp.addData('encoder_data', encoder_data)

        #TODO: instantiate new dataframe at beginning of each
        #routine. Currently, this just incrementally appends
        #resulting in duplicate data.

        #For now, data is exported separately on End Experiment
        #in a .csv
  Routine nidaqTrigger
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    TextComponent text_waiting_message
      letterHeight = 0.05
      startVal [frame N] = 0
      text = Waiting for NIDAQ trigger to begin visual stim...
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    CodeComponent code__nidaq_trigger
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        import nidaqmx
        from psychopy import core

        nidaq_trigger = False

        # Function to wait for trigger signal
        def wait_for_trigger():
            # Define NI-DAQmx task
            with nidaqmx.Task() as task:
                # Configure the task to listen for a digital input signal on a specific port and line
                task.di_channels.add_di_chan("Dev1/port2/line0")

                print("Waiting for trigger signal...")
                while True:
                    signal = task.read()
                    if signal:  # Assuming the trigger signal is a digital high (True) signal
                        print("Trigger signal received!")
                        nidaq_trigger = False
                        break
                    core.wait(0.01)  # Small delay to prevent CPU overload
      Begin Routine:
        wait_for_trigger()
      Each Frame:
        ## Check the condition each frame
        #with nidaqmx.Task() as nidaq:
        #    # Configure the task to listen for a digital input signal on a specific port and line
        #    nidaq.di_channels.add_di_chan("Dev1/port2/line0")
        #    print("Waiting for trigger signal...")
        #
        #    nidaq_trigger = nidaq.read()
        #
        #    if nidaq_trigger:
        #        continueRoutine = False  # Ends the routine if the condition is met
        #
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent new_file_directory
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        newFileName = os.path.join(os.path.expanduser(u"~"), u"Desktop", u"exportTest")
        thisExp.filename = newFileName
        logFile.filename = newFileName
  Routine nidaqSynch
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    CodeComponent code_nidaq_sync_pulse
      Code Type = Auto->JS
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      Begin Experiment:
        from nidaqmx import Task
        import numpy as np
        import time

        class SyncPulseTask(Task):
            def __init__(self):
                Task.__init__(self)
                self.CreateDIChan("/Dev1/port0/line0", "", PyDAQmx.DAQmx_Val_ChanForAllLines)
                self.AutoRegisterEveryNSamplesEvent()
                self.sync_times = []

            def EveryNCallback(self):
                pulse_time = time.time()
                self.sync_times.append(pulse_time)
                print(f"Sync pulse received at {pulse_time}")
                return 0  # The function should return an integer

            def Start(self):
                self.StartTask()

        sync_task = SyncPulseTask()
        sync_task.Start()
      Each Frame:
        # Check for new sync pulses and update the experiment data if needed
        if len(sync_task.sync_times) > 0:
            last_sync_time = sync_task.sync_times[-1]
            print(f"Last sync pulse time: {last_sync_time}")
      End Experiment:
        thisExp.addData('sync_times', sync_task.sync_times)
Flow
  Routine nidaqTrigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    Routine display_gratings
  LoopTerminator trials
