PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s' % (expInfo['Subject ID'], expName, expInfo['date'])
  Experiment info = {'Protocol ID': 'devJG', 'Subject ID': '01', 'Session ID': '01'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Save csv file = True
  Save excel file = True
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gratings_vis_devJG_v0.4
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine display_gratings
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    CodeComponent code_generate_grating_angles
      Code Type = Auto->JS
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      Before Experiment:
        import random


        grating_angles_array = [0, 45, 90, 135, 180, 225, 270, 315]
      Begin Experiment:
        grating_index = 0
      Begin Routine:
        #grating_angle = random.choice(grating_angles_array)

        print("!!!!! Start of routine angle index:", grating_index)

            #print("2. else:", grating_index)
        grating_angle = grating_angles_array[grating_index]
        print("Displaying angle:", grating_angle, " with index: ", grating_index)
        grating_index += 1
        print("grating_index += 1:", grating_index)

        if grating_index == len(grating_angles_array):
            print(grating_index, " is >= ", len(grating_angles_array))
            grating_index = 0
            #print("if statement: index reset")
    ImageComponent stim_grayScreen
      color = 0.0000, 0.0000, 0.0000
      durationEstim = 3
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 300
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    GratingComponent stim_grating
      durationEstim = 2
      opacity = 2
      ori [set every repeat] = grating_angle
      phase [set every frame] = t
      sf = 4
      size = (2, 2)
      startVal [time (s)] = 3.0
      stopVal [frame N] = 300
      tex = sin
      texture resolution = 256
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    CodeComponent code_nidaq_sync_pulse_2
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import nidaqmx
        import time
        from nidaqmx.constants import LineGrouping

        class SyncPulseTask:
            def __init__(self, device, line):
                self.device = device
                self.line = line
                self.sync_times = []
                self.task = nidaqmx.Task()
                self.task.di_channels.add_di_chan(f"{self.device}/{self.line}", line_grouping=LineGrouping.CHAN_PER_LINE)

            def read_pulse(self):
                data = self.task.read(number_of_samples_per_channel=1, timeout=10.0)
                if data[0]:
                    pulse_time = time.time()
                    self.sync_times.append(pulse_time)
                    print(f"Sync pulse received at {pulse_time}")

            def start(self):
                self.task.start()

            def stop(self):
                self.task.stop()
                self.task.close()

        sync_task = SyncPulseTask("Dev1", "port2/line0")
        sync_task.start()
      Each Frame:
        # Check for sync pulse each frame
        sync_task.read_pulse()
      End Experiment:
        # Stop the sync task
        sync_task.stop()

        #save
        thisExp.addData('sync_times', sync_task.sync_times)
    CodeComponent code_read_encoder
      Code Type = Auto->JS
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      Before Experiment:
        arduino_port = 'COM3'
        encoder_radius = 2.75
      Begin Experiment:
        import serial
        import time

        class Encoder:
            def __init__(self, port, baud_rate=9600, radius=2.75, sampling_rate_hz=20):
                self.port = port
                self.baud_rate = baud_rate
                self.radius = radius
                self.sampling_rate_hz = sampling_rate_hz
                self.sampling_interval = 1.0 / sampling_rate_hz
                self.ser = serial.Serial(self.port, self.baud_rate, timeout=1)
                time.sleep(2)  # Wait for the serial connection to initialize

            def read_data(self):
                if self.ser.in_waiting > 0:
                    line = self.ser.readline().decode('utf-8').strip()
                    if line:
                        try:
                            total_distance = float(line)
                            return total_distance
                        except ValueError:
                            return None  # Ignore lines that can't be converted to float
                return None

            def close(self):
                self.ser.close()
                print("Serial connection closed.")

        # Initialize the encoder object
        encoder = Encoder(port=arduino_port, baud_rate=9600, radius=encoder_radius, sampling_rate_hz=20)
      Begin Routine:
        # Start recording data
        recorded_data = []
      Each Frame:
        # Read data during the routine
        distance = encoder.read_data()
        if distance is not None:
            recorded_data.append(distance)
            print(f"Total Distance: {distance} inches")
        time.sleep(encoder.sampling_interval)
      End Experiment:
        # Save data to PsychoPy's data output
        thisExp.addData('encoder_data', recorded_data)

        # Close the serial connection
        encoder.close()
        print("Data recording complete.")
  Routine nidaqTrigger
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    TextComponent text_waiting_message
      letterHeight = 0.05
      startVal [frame N] = 0
      text = Waiting for NIDAQ trigger to begin visual stim...
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    CodeComponent code__nidaq_trigger
      Code Type = Auto->JS
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      Before Experiment:
        import nidaqmx
        from psychopy import core
        import time

        nidaq_trigger = False

        # Function to wait for trigger signal
        def wait_for_trigger():
            # Define NI-DAQmx task
            with nidaqmx.Task() as task:
                # Configure the task to listen for a digital input signal on a specific port and line
                task.di_channels.add_di_chan("Dev1/port2/line0")

                print("Waiting for trigger signal...")
                while True:
                    signal = task.read()
                    if signal:  # Assuming the trigger signal is a digital high (True) signal
                        print("Trigger signal received!")
                        nidaq_trigger = False
                        break
                    core.wait(0.01)  # Small delay to prevent CPU overload

        def trigger_start():
            with nidaqmx.Task() as task:
                task.do_channels.add_do_chan("Dev1/port2/line0")
                task.write(True)
                time.sleep(0.1)
                task.write(False)
      Begin Routine:
        #wait_for_trigger()
      Each Frame:
        ## Check the condition each frame
        #with nidaqmx.Task() as nidaq:
        #    # Configure the task to listen for a digital input signal on a specific port and line
        #    nidaq.di_channels.add_di_chan("Dev1/port2/line0")
        #    print("Waiting for trigger signal...")
        #
        #    nidaq_trigger = nidaq.read()
        #
        #    if nidaq_trigger:
        #        continueRoutine = False  # Ends the routine if the condition is met
        #
      End Routine:
        trigger_start()
    KeyboardComponent key_resp_start
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine nidaqSynch
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    CodeComponent code_nidaq_sync_pulse
      Code Type = Auto->JS
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      Begin Experiment:
        from nidaqmx import Task
        import numpy as np
        import time

        class SyncPulseTask(Task):
            def __init__(self):
                Task.__init__(self)
                self.CreateDIChan("/Dev1/port0/line0", "", PyDAQmx.DAQmx_Val_ChanForAllLines)
                self.AutoRegisterEveryNSamplesEvent()
                self.sync_times = []

            def EveryNCallback(self):
                pulse_time = time.time()
                self.sync_times.append(pulse_time)
                print(f"Sync pulse received at {pulse_time}")
                return 0  # The function should return an integer

            def Start(self):
                self.StartTask()

        sync_task = SyncPulseTask()
        sync_task.Start()
      Each Frame:
        # Check for new sync pulses and update the experiment data if needed
        if len(sync_task.sync_times) > 0:
            last_sync_time = sync_task.sync_times[-1]
            print(f"Last sync pulse time: {last_sync_time}")
      End Experiment:
        thisExp.addData('sync_times', sync_task.sync_times)
Flow
  Routine nidaqTrigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine display_gratings
  LoopTerminator trials
