PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gratings_vis_stim_devJG_v0.1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Daq_Trigger
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Define global parameters
        param = {
            'grat': {
                'nGrat': 5,
                'tStruct': np.array([
                    [45, 0.05],
                    [90, 0.1],
                    [135, 0.15],
                    [180, 0.2],
                    [225, 0.25]
                ]),
                'gratON': 1.0,
                'gratOFF': 1.0
            },
            'cyclespersecond': 1.0,
            'contrast': 1.0,
            'width': 800,
            'height': 600,
            'dims': [800, 600]
        }

        # Create gray textures
        texgray = [visual.GratingStim(win, color=[0.5, 0.5, 0.5], size=(param['width'], param['height'])) for _ in range(10)]

        # Function to simulate getWheel
        def getWheel():
            pass  # Placeholder for actual getWheel function
      Begin Routine:
        # Initialize variables
        rotateMode = 'default'
        waitframes = 1
        ifi = 1.0 / 60.0  # assuming 60 Hz refresh rate
        vbl = core.getTime()
        vbl0 = vbl
        m = 1
        phase = 90
        nFrames = 1
        grayFrames = 1

        # Initialize grating texture
        angle = param['grat']['tStruct'][m - 1, 0]
        freq = param['grat']['tStruct'][m - 1, 1]
        phaseincrement = (param['cyclespersecond'] * 360) * ifi
        gratingtex = visual.GratingStim(win, tex='sin', mask='none', size=(256, 256),
                                        sf=freq, contrast=param['contrast'])
      Each Frame:
        # Display gray screen
        if vbl - vbl0 < m * param['grat']['gratOFF'] + (m - 1) * param['grat']['gratON'] - 1.5 * waitframes * ifi:
            getWheel()
            texgray[grayFrames - 1].draw()
            win.flip()
            vbl = core.getTime()
            if grayFrames == 1:
                print(f'Gray #{m} START: {vbl - vbl0:.3f}')
            grayFrames += 1
        else:
            # Display grating
            if vbl - vbl0 < m * (param['grat']['gratOFF'] + param['grat']['gratON']) - 1.5 * waitframes * ifi:
                getWheel()
                gratingtex.phase += phaseincrement / 360.0
                gratingtex.ori = angle
                gratingtex.draw()
                win.flip()
                vbl = core.getTime()
                if nFrames == 1:
                    print(f'Mov  #{m} START: {vbl - vbl0:.3f}')
                nFrames += 1
            else:
                # Move to the next grating or end routine
                m += 1
                if m > param['grat']['nGrat']:
                    continueRoutine = False
                else:
                    angle = param['grat']['tStruct'][m - 1, 0]
                    freq = param['grat']['tStruct'][m - 1, 1]
                    phase = 90
                    phaseincrement = (param['cyclespersecond'] * 360) * ifi
                    gratingtex = visual.GratingStim(win, tex='sin', mask='none', size=(256, 256),
                                                    sf=freq, contrast=param['contrast'])
                    nFrames = 1
                    grayFrames = 1
  Routine Grating_OFF
    RoutineSettingsComponent Grating_OFF
      stopVal [duration (s)] = 5
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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  Routine Grating_ON
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    GratingComponent grating
      mask = gauss
      phase [set every repeat] = 0.0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = sin
      units = deg
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  Routine env_grating
    RoutineSettingsComponent env_grating
      stopVal [frame N] = 20
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    GratingComponent grating_3
      phase [set every frame] = 2*t
      sf = 4
      size = (1, 1)
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 500
      tex = sin
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  Routine gratins_for_sinba
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    GratingComponent grating_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      tex = sin
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Flow
  Routine Daq_Trigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine env_grating
    Routine Grating_OFF
  LoopTerminator trials
  Routine gratins_for_sinba
