PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gratings_vis_stim_devJG_v0.3
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine display_gratings
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    CodeComponent code_generate_grating_angles
      Code Type = Auto->JS
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      Before Experiment:
        import random


        grating_angles_array = [0, 45, 90, 135, 180, 225, 270, 315]
      Begin Experiment:
        grating_index = 0
      Begin Routine:
        #grating_angle = random.choice(grating_angles_array)

        print("!!!!! Start of routine angle index:", grating_index)

            #print("2. else:", grating_index)
        grating_angle = grating_angles_array[grating_index]
        print("Displaying angle:", grating_angle, " with index: ", grating_index)
        grating_index += 1
        print("grating_index += 1:", grating_index)

        if grating_index == len(grating_angles_array):
            print(grating_index, " is >= ", len(grating_angles_array))
            grating_index = 0
            #print("if statement: index reset")
    ImageComponent stim_grayScreen
      color = 0.0000, 0.0000, 0.0000
      durationEstim = 3
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 300
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    GratingComponent stim_grating
      durationEstim = 2
      opacity = 2
      ori [set every repeat] = grating_angle
      phase [set every frame] = t
      sf = 4
      size = (2, 2)
      startVal [time (s)] = 3.0
      stopVal [frame N] = 300
      tex = sin
      texture resolution = 256
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  Routine nidaqTrigger
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    TextComponent text_waiting_message
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [condition] = waiting == False
      text = Waiting for NIDAQ trigger to begin visual stim...
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    CodeComponent code_trigger
      Code Type = Auto->JS
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      Before Experiment:
        import nidaqmx
        from psychopy import core

        waiting = False

        # Function to wait for trigger signal
        def wait_for_trigger():
            # Define NI-DAQmx task
            with nidaqmx.Task() as task:
                # Configure the task to listen for a digital input signal on a specific port and line
                task.di_channels.add_di_chan("Dev1/port2/line0")

                print("Waiting for trigger signal...")
                while True:
                    signal = task.read()
                    if signal:  # Assuming the trigger signal is a digital high (True) signal
                        print("Trigger signal received!")
                        waiting = False
                        break
                    core.wait(0.01)  # Small delay to prevent CPU overload
      Begin Routine:
        wait_for_trigger()
    TextComponent test_trigger_received
      disabled = True
      letterHeight = 0.05
      stopVal [duration (s)] = 5
      text = nidaq trigger received
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Flow
  Routine nidaqTrigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 128
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    Routine display_gratings
  LoopTerminator trials
