PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s/sub-%s/ses-%s/beh/sub-%s_ses-%s_%s' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'], expInfo['Subject ID'], expInfo['Session ID'], timestamp)
  Experiment info = {'Protocol ID': '$sysarg_protocol_id', 'Subject ID': '$sysarg_subject_id', 'Session ID': '$sysarg_session_id', 'Save Directory': '$sysarg_save_dir'}
  Full-screen window = True
  Monitor = wfieldMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Save log file = False
  Screen = 3
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Gratings_vis_build-v0.7
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine nidaqSynch
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    CodeComponent code_nidaq_sync_pulse
      Code Type = Auto->JS
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      Begin Experiment:
        from nidaqmx import Task
        import numpy as np
        import time

        class SyncPulseTask(Task):
            def __init__(self):
                Task.__init__(self)
                self.CreateDIChan("/Dev1/port0/line0", "", PyDAQmx.DAQmx_Val_ChanForAllLines)
                self.AutoRegisterEveryNSamplesEvent()
                self.sync_times = []

            def EveryNCallback(self):
                pulse_time = time.time()
                self.sync_times.append(pulse_time)
                print(f"Sync pulse received at {pulse_time}")
                return 0  # The function should return an integer

            def Start(self):
                self.StartTask()

        sync_task = SyncPulseTask()
        sync_task.Start()
      Each Frame:
        # Check for new sync pulses and update the experiment data if needed
        if len(sync_task.sync_times) > 0:
            last_sync_time = sync_task.sync_times[-1]
            print(f"Last sync pulse time: {last_sync_time}")
      End Experiment:
        thisExp.addData('sync_times', sync_task.sync_times)
  Routine CustomSaving
    RoutineSettingsComponent CustomSaving
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      desc:
        Saves wheel encoder data to relative BIDS directory path built from input arguments before experiment initiation.

        ie(C:/psychopy/experiment/data/protocol/subject/session/beh)
    CodeComponent save_encoder_data
      Code Type = Auto->JS
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      End Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        # Sipelab standard BIDS protocol file naming for
        #   future batch analysis and data wrangling
        protocol_id = expInfo['Protocol ID']
        subject_id = expInfo['Subject ID']
        session_id = expInfo['Session ID']
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        #save_to = u'data/%s/sub-%s/ses-%s/beh' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'])
        save_to = f'data/{protocol_id}/sub-{subject_id}/ses-{session_id}/beh'
        new_dir = os.path.join(_thisDir, save_to)

        # Create the path if it does not exist
        if not os.path.exists(new_dir):
            os.makedirs(new_dir)


        filename = os.path.join(new_dir, f"sub-{subject_id}_ses-{session_id}_{timestamp}_wheeldf.csv")

        encoder_data.to_csv(filename, index=False)
        #==================================================================================================#
  Routine Input_Output
    RoutineSettingsComponent Input_Output
      color = $[0,0,0]
      colorSpace = lms
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      desc:
        Receive command line arguments from a Parent process when launching this experiment as a a subprocess. This code is meant to circumvent the usual launch of a PsychoPy experiment, forgoing manual entry of subject information into a popup dialog box.

        This block allows standard input system arguments to define:
        - BIDS format information for file saving
        - the number of stimulus trials calculated in the parent process.
        - Save file directory paths
    CodeComponent get_input_arguments
      Code Type = Auto->JS
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      Before Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        #add system argument functionality
        #Get command line arguments passed if present
        sysarg_protocol_id = None
        sysarg_subject_id = None
        sysarg_session_id = None
        sysarg_save_dir = None
        sysarg_nTrials = None # changed data.TrialHandler2 object value nReps value to call this variable
        if len(sys.argv) > 1:
            sysarg_protocol_id = sys.argv[1]  # get the first argument from command line
            sysarg_subject_id = sys.argv[2]  # get the second argument from command line
            sysarg_session_id = sys.argv[3]  # get the third argument from command line
            sysarg_save_dir = sys.argv[4]  # get the fourth argument from command line
            nTrials = sys.argv[5] # get the fifth argument from the command line
            #encoder = sys.argv[6] # TODO: accept encoder parameters
        #==================================================================================================#
    CodeComponent save_bids_format
      Code Type = Auto->JS
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      End Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        # Sipelab standard BIDS protocol file naming for
        #   future batch analysis and data wrangling
        protocol_id = expInfo['Protocol ID']
        subject_id = expInfo['Subject ID']
        session_id = expInfo['Session ID']
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        #save_to = u'data/%s/sub-%s/ses-%s/beh' % (expInfo['Protocol ID'], expInfo['Subject ID'], expInfo['Session ID'])
        save_to = f'data/{protocol_id}/sub-{subject_id}/ses-{session_id}/beh'
        new_dir = os.path.join(_thisDir, save_to)

        # Create the path if it does not exist
        if not os.path.exists(new_dir):
            os.makedirs(new_dir)


        filename = os.path.join(new_dir, f"sub-{subject_id}_ses-{session_id}_{timestamp}_wheeldf.csv")

        if encoder_data is not None:
            encoder_data.to_csv(filename, index=False)
        else:
            print("No encoder data in `encorder_data`")
        #==================================================================================================#
  Routine Custom_Trigger
    RoutineSettingsComponent Custom_Trigger
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      desc:
        Displays text on grey screen until a keyboard response is registered.

        Upon press, the experiment starts immediately
    TextComponent text_waiting_message
      letterHeight = 0.05
      startVal [frame N] = 0
      text = Press the SPACEBAR to begin visual stim...
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Display_Gratings
    RoutineSettingsComponent Display_Gratings
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      desc:
        Steps through grating angle array randomly.

        Displays 2 second grating and 3 second grey screen

        Reads encoder every screen refresh (~60hz)
    CodeComponent generate_grating_angles
      Code Type = Auto->JS
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      Before Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        import random

        grating_angles_array = [0, 45, 90, 135, 180, 225, 270, 315]
        #==================================================================================================#
      Begin Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        grating_index = 0
        #==================================================================================================#
      Begin Routine:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        #grating_angle = random.choice(grating_angles_array)

        print("!!!!! Start of routine angle index:", grating_index)

        grating_angle = grating_angles_array[grating_index]
        print("Displaying angle:", grating_angle, " with index: ", grating_index)
        grating_index += 1
        print("grating_index += 1:", grating_index)

        if grating_index == len(grating_angles_array):
            print(grating_index, " is >= ", len(grating_angles_array))
            grating_index = 0
            #print("if statement: index reset")
        #==================================================================================================#
    ImageComponent stim_grayScreen
      color = 0.0000, 0.0000, 0.0000
      durationEstim = 3
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 300
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    GratingComponent stim_grating
      durationEstim = 2
      opacity = 2
      ori [set every repeat] = grating_angle
      phase [set every frame] = t
      sf = 4
      size = (2, 2)
      startVal [time (s)] = 3.0
      stopVal [frame N] = 300
      tex = sin
      texture resolution = 256
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    CodeComponent read_encoder
      Code Type = Auto->JS
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      Before Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================
        import serial
        import time
        from datetime import datetime # for BIDS saving
        import pandas as pd
        import os
        import threading
        import math

        # For BIDS file saving
        timestamp = datetime.now().strftime('%Y%m%d_%H%M%S') # get current timestamp (BIDS)

        # Constants
        WHEEL_DIAMETER = 0.2  # in meters, example value
        ENCODER_CPR = 1000    # encoder counts per revolution
        SAMPLE_WINDOW = 0.05  # sample window in seconds, matching the Arduino sample window
        SAVE_DIR = r'C:/dev/devOutput/encoder'  # Directory to save data
        PORT = 'COM4'

        # Set up the serial port connection to arduino
        arduino = serial.Serial(port=PORT, baudrate=57600, timeout=1)

        # Initialize DataFrame to store encoder data
        columns = ['timestamp', 'speed', 'distance', 'direction']
        encoder_data = pd.DataFrame(columns=columns)

        # Shared variable for clicks (raw value received from encoder)
        clicks_lock = threading.Lock() #thread locked for synchronization
        shared_clicks = 0 #cross-thread accessible variable

        def read_encoder():
            global shared_clicks
            while True:
                try:
                    data = arduino.readline().decode('utf-8').strip()
                    if data:
                        with clicks_lock:
                            shared_clicks = int(data)
                except ValueError:
                    pass

        #NOTE: time_interval value should use PsychoPy's core.Clock()
        def calculate_metrics(clicks, time_interval):
            rotations = clicks / ENCODER_CPR
            distance = rotations * (math.pi * WHEEL_DIAMETER)
            speed = distance / time_interval  # m/s
            return speed, distance

        def determine_direction(clicks):
            if clicks == 0:
                return 0  # Stationary
            elif clicks > 0:
                return 1  # Forward
            else:
                return 2  # Backward

        def save_data(timestamp, speed, distance, direction):
            global encoder_data
            new_data = pd.DataFrame([[timestamp, speed, distance, direction]], columns=encoder_data.columns)
            encoder_data = pd.concat([encoder_data, new_data], ignore_index=True)
        #==================================================================================================#
      Begin Experiment:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        total_distance = 0

        # Start the encoder reading thread
        encoder_thread = threading.Thread(target=read_encoder, daemon=True)
        encoder_thread.start()
        #==================================================================================================#
      Begin Routine:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        # This value provides the encoder thread with
        #   the timestamp for the start of each Routine
        prev_time = core.getTime()
        #==================================================================================================#
      Each Frame:
        #=============================== Custom Codeblock jgronemeyer =====================================#
        current_time = core.getTime()
        time_interval = current_time - prev_time
        #Time must have passed to collect encoder clicks
        if time_interval >= SAMPLE_WINDOW:
            with clicks_lock:
                clicks = shared_clicks

            speed, distance = calculate_metrics(clicks, time_interval)
            total_distance += distance
            direction = determine_direction(clicks)

            timestamp = current_time
            save_data(timestamp, speed, total_distance, direction)

            #comment out/in for debugging real-time output
            print(f"Time: {timestamp:.2f}s, Speed: {speed:.2f} m/s, Total Distance: {total_distance:.2f} m, Direction: {direction}")

            prev_time = current_time
        #==================================================================================================#
      End Routine:
        #save the dataframe trial by trial
        #thisExp.addData('encoder_data', encoder_data)

        #TODO: instantiate new dataframe at beginning of each
        #routine. Currently, this just incrementally appends
        #resulting in duplicate data.

        #For now, data is exported separately on End Experiment
        #in a .csv
Flow
  Routine Input_Output
  Routine Custom_Trigger
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = nTrials
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    Routine Display_Gratings
  LoopTerminator trials
